PsychoPy2experiment version="1.82.01"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Screen = 1
  Window size (pixels) = [1024, 768]
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = experiment
  Full-screen window = True
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Routines
  Routine trial
    TextComponent presentation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word.encode('utf-8','ignore')
      stopVal [duration (s)] = 1.0
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    CodeComponent importing
      Code Type = Py
      Begin Experiment:
        import sys
        reload(sys)
        sys.setdefaultencoding("utf-8")
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ..\data\sampled.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'Category': 'animal', 'Mean_Familiarity': 4.4, 'Word': 'Abejorro', 'Mean_Valence': 2.1315789474, 'SD_Familiarity': 2.4152294577, 'Length': 8, 'picked': True, 'English': 'Bumblebee', 'SD_Valence': 1.3187023235, 'SD_Concreteness': 1.5307950004, 'Mean_Arousal': 7.078947368400001, 'Frequency': 0.18, 'log_frequency': -1.7147984281, 'Mean_Concreteness': 7.52, 'SD_Arousal': 1.5833863633},
      {'Category': 'animal', 'Mean_Familiarity': 4.24, 'Word': 'Almeja', 'Mean_Valence': 4.9210526316, 'SD_Familiarity': 2.3853720884, 'Length': 6, 'picked': True, 'English': 'Clam', 'SD_Valence': 1.6986732334, 'SD_Concreteness': 2.622339922, 'Mean_Arousal': 3.4210526316000003, 'Frequency': 0.54, 'log_frequency': -0.6161861394, 'Mean_Concreteness': 6.72, 'SD_Arousal': 1.7496189384},
      {'Category': 'animal', 'Mean_Familiarity': 3.32, 'Word': 'Asno', 'Mean_Valence': 5.3157894737, 'SD_Familiarity': 2.3043437244, 'Length': 4, 'picked': True, 'English': 'Donkey', 'SD_Valence': 1.6942711605, 'SD_Concreteness': 1.9433647796, 'Mean_Arousal': 4.5263157895, 'Frequency': 3.93, 'log_frequency': 1.3686394259, 'Mean_Concreteness': 6.88, 'SD_Arousal': 1.5894388284999998},
      {'Category': 'animal', 'Mean_Familiarity': 3.44, 'Word': 'Babosa', 'Mean_Valence': 2.1315789474, 'SD_Familiarity': 2.2, 'Length': 6, 'picked': True, 'English': 'Slug', 'SD_Valence': 1.3390406536, 'SD_Concreteness': 1.9209372712000001, 'Mean_Arousal': 5.0789473684, 'Frequency': 0.36, 'log_frequency': -1.0216512475, 'Mean_Concreteness': 6.76, 'SD_Arousal': 2.5296253215}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
    Routine trial
  LoopTerminator trials
